OpenViBE-Scenario
Comment
  Selecting the channels for computing
  alpha and beta power ( HERE CHANNEL LIST).
Comment
  Alpha
  Filtering in the [7-13Hz] frequency band.

  Beta
  Filtering in the [16-24Hz] frequency band.
Comment
  Accumulating the signal with epochs
  (1 second) every 0.1 seconds.
Comment
  Squaring (x*x) the signal.
Comment
  Averageing the squared  (x*x) the signal.
Comment
  Averageing last 4 epochs.
Comment
  We have alpha/beta power for each of the electrodes ....

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "O1;O2;P7;P8;AF3;AF4;F3;F4;F7;F8;FC5;FC6" => #1
  Channel List = O1;O2;P7;P8;AF3;AF4;F3;F4;F7;F8;FC5;FC6
  Action = Select
  Channel Matching Method = Smart
Data=#1 -> Signal display "Raw Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal filter: Alpha => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
Data=#3 -> Signal display "Alpha Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #8
  Averaging type = Moving epoch average
  Epoch count = 4
Data=#8 -> Signal display "Alpha Power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#8 -> Matrix Display "Alpha Power"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#8 -> Channel Selector "O1"
  Channel List = O1
  Action = Select
  Channel Matching Method = Smart
-> Alpha Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/o1
#8 -> Channel Selector "O2"
  Channel List = O2
  Action = Select
  Channel Matching Method = Smart
-> Alpha Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/o2
#8 -> Channel Selector "P7"
  Channel List = P7
  Action = Select
  Channel Matching Method = Smart
-> Alpha Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/p7
#8 -> Channel Selector "P8"
  Channel List = P8
  Action = Select
  Channel Matching Method = Smart
-> Alpha Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/p8
#8 -> Matrix Display "Alpha & Beta Power (a)"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#8 -> Channel Selector "AF3"
  Channel List = AF3
  Action = Select
  Channel Matching Method = Smart
-> Alpha Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/af3
#8 -> Channel Selector "AF4"
  Channel List = AF4
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/af4
#8 -> Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/f3
#8 -> Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/f4
#8 -> Channel Selector "F7"
  Channel List = F7
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/f7
#8 -> Channel Selector "F8"
  Channel List = F8
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/f8
#8 -> Channel Selector "FC5"
  Channel List = FC5
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/fc5
#8 -> Channel Selector "FC6"
  Channel List = FC6
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/fc6
#1 -> Temporal filter: Beta => #36
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 0.5
Data=#36 -> Signal display "Beta Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#36 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #41
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "O1"
  Channel List = O1
  Action = Select
  Channel Matching Method = Smart
-> beta
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/o1
#41 -> Channel Selector "O2"
  Channel List = O2
  Action = Select
  Channel Matching Method = Smart
-> beta
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/o2
#41 -> Channel Selector "P7"
  Channel List = P7
  Action = Select
  Channel Matching Method = Smart
-> beta
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/p7
#41 -> Channel Selector "P8"
  Channel List = P8
  Action = Select
  Channel Matching Method = Smart
-> beta
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/p8
#41 -> Matrix Display "Beta Power"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#41 -> Signal display "Beta Power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#41 -> Channel Selector "AF3"
  Channel List = AF3
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/af3
#41 -> Channel Selector "AF4"
  Channel List = AF4
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/af4
#41 -> Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/f3
#41 -> Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/f4
#41 -> Channel Selector "F7"
  Channel List = F7
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/f7
#41 -> Channel Selector "F8"
  Channel List = F8
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/f8
#41 -> Channel Selector "FC5"
  Channel List = FC5
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/fc5
#41 -> Channel Selector "FC6"
  Channel List = FC6
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/fc6
#41 -> Matrix Display "Alpha & Beta Power (b)"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false

Channel Selector "AF3;AF4;F3;F4;F7;F8;FC5;FC6"
  Channel List = AF3;AF4;F3;F4;F7;F8;FC5;FC6
  Action = Select
  Channel Matching Method = Smart

Channel Selector "O1;O2;P7;P8"
  Channel List = O1;O2;P7;P8
  Action = Select
  Channel Matching Method = Smart

Channel Selector "Gyro-X"
  Channel List = Gyro-X
  Action = Select
  Channel Matching Method = Smart
-> Gyro OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/gyro/x

Channel Selector "Gyro-Y"
  Channel List = Gyro-Y
  Action = Select
  Channel Matching Method = Smart
-> Gyro OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/gyro/y
