OpenViBE-Scenario
Comment
  Selecting the channels for computing
  alpha and beta power ( HERE CHANNEL LIST).
Comment
  Alpha
  Filtering in the [7-13Hz] frequency band.

  Beta
  Filtering in the [16-24Hz] frequency band.
Comment
  Accumulating the signal with epochs
  (1 second) every 0.1 seconds.
Comment
  Squaring (x*x) the signal.
Comment
  Averageing the squared  (x*x) the signal.
Comment
  Averageing last 4 epochs.
Comment
  We have alpha/beta power for each of the electrodes ....

Sinus oscillator
  Channel count = 12
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Channel Rename
  New channel names = O1;O2;P7;P8;AF3;AF4;F3;F4;F7;F8;FC5;FC6
-> Simple DSP
  Equation = exp(x)
-> Channel Selector "O1;O2;P7;P8;AF3;AF4;F3;F4;F7;F8;FC5;FC6" => #3
  Channel List = O1;O2;P7;P8;AF3;AF4;F3;F4;F7;F8;FC5;FC6
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter: Alpha
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #8
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "O1"
  Channel List = O1
  Action = Select
  Channel Matching Method = Smart
-> Alpha Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/o1
#8 -> Channel Selector "O2"
  Channel List = O2
  Action = Select
  Channel Matching Method = Smart
-> Alpha Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/o2
#8 -> Channel Selector "P7"
  Channel List = P7
  Action = Select
  Channel Matching Method = Smart
-> Alpha Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/p7
#8 -> Channel Selector "P8"
  Channel List = P8
  Action = Select
  Channel Matching Method = Smart
-> Alpha Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/p8
#8 -> Channel Selector "AF3"
  Channel List = AF3
  Action = Select
  Channel Matching Method = Smart
-> Alpha Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/af3
#8 -> Channel Selector "AF4"
  Channel List = AF4
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/af4
#8 -> Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/f3
#8 -> Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/f4
#8 -> Channel Selector "F7"
  Channel List = F7
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/f7
#8 -> Channel Selector "F8"
  Channel List = F8
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/f8
#8 -> Channel Selector "FC5"
  Channel List = FC5
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/fc5
#8 -> Channel Selector "FC6"
  Channel List = FC6
  Action = Select
  Channel Matching Method = Smart
-> Alpha
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/alpha/fc6
#3 -> Temporal filter: Beta
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #37
  Averaging type = Moving epoch average
  Epoch count = 4
-> Channel Selector "O1"
  Channel List = O1
  Action = Select
  Channel Matching Method = Smart
-> beta
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/o1
#37 -> Channel Selector "O2"
  Channel List = O2
  Action = Select
  Channel Matching Method = Smart
-> beta
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/o2
#37 -> Channel Selector "P7"
  Channel List = P7
  Action = Select
  Channel Matching Method = Smart
-> beta
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/p7
#37 -> Channel Selector "P8"
  Channel List = P8
  Action = Select
  Channel Matching Method = Smart
-> beta
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/p8
#37 -> Channel Selector "AF3"
  Channel List = AF3
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/af3
#37 -> Channel Selector "AF4"
  Channel List = AF4
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/af4
#37 -> Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/f3
#37 -> Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/f4
#37 -> Channel Selector "F7"
  Channel List = F7
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/f7
#37 -> Channel Selector "F8"
  Channel List = F8
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/f8
#37 -> Channel Selector "FC5"
  Channel List = FC5
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/fc5
#37 -> Channel Selector "FC6"
  Channel List = FC6
  Action = Select
  Channel Matching Method = Smart
-> Beta Power OSC
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12000
  OSC Address = /openvibe/beta/fc6
